<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AindJustFramesSchemas;assembly=Extensions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>TriggeredCamerasLogger</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>thisStream</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisStream</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>thisCameraController</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisStream</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Key</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>thisCameraName</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisCameraController</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Cameras</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisCameraName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>thisCamera</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisCamera</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>VideoWriter</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="p1:MatchVideoWriter">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VideoWriterFfmpeg" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>FfmpegWriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisStream</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisCameraName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ContainerExtension</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="VideoExtension" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Modality" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="OutputArguments" Selector="OutputArguments" />
                      <Property Name="InputArguments" Selector="InputArguments" />
                      <Property Name="FrameRate" Selector="FrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogSpinnakerFfmpeg.bonsai">
                    <Modality>BehaviorVideos</Modality>
                    <LogName>FaceCamera</LogName>
                    <VideoExtension>mp4</VideoExtension>
                    <OutputArguments>-vf "scale=out_color_matrix=bt709:out_range=full" -c:v h264_nvenc -pix_fmt nv12 -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -maxrate 700M -bufsize 350M</OutputArguments>
                    <InputArguments>-colorspace rgb -color_primaries bt709 -color_trc linear</InputArguments>
                    <Verbosity>Warning</Verbosity>
                    <FrameRate>0</FrameRate>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SaveRawVideo</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisCameraName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Modality" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai">
                    <SubjectName>LoggingRootPath</SubjectName>
                    <Modality>BehaviorVideos</Modality>
                    <LogName>FaceCamera</LogName>
                    <VideoExtension>avi</VideoExtension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="Video" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FrameRate" Selector="FrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName />
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>DIB</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="14" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="14" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="14" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="14" Label="Source4" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source5" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="24" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="20" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="24" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source3" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:MatchVideoWriter">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VideoWriterOpenCv" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>OpenCvWriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisStream</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisCameraName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ContainerExtension</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="VideoExtension" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Modality" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FrameRate" Selector="FrameRate" />
                      <Property Name="FourCC" Selector="FourCC" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogSpinnakerOpenCv.bonsai">
                    <Modality>BehaviorVideos</Modality>
                    <LogName>FaceCamera</LogName>
                    <VideoExtension>mp4</VideoExtension>
                    <FrameRate>30</FrameRate>
                    <FourCC>FMP4</FourCC>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisCameraName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LogName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Modality</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Modality" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai">
                    <SubjectName>LoggingRootPath</SubjectName>
                    <Modality>BehaviorVideos</Modality>
                    <LogName>FaceCamera</LogName>
                    <VideoExtension>avi</VideoExtension>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="Video" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisWriter</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FrameRate" Selector="FrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName />
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>DIB</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="14" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="14" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="14" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="14" Label="Source4" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source5" />
                  <Edge From="14" To="23" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="19" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="23" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source3" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>